private function A_UserInput(  ) void ;
private function B_Definitions(  ) void ;
private function C_Initialise(  ) void ;
private function D_LoadInstructions(  ) void ;
private function E_ColonyPicking(  ) void ;
private function F_Output(  ) void ;
private function G_DeInitialise(  ) void ;
private function _MappingFileProcessing(  ) void ;
private function _MovePlateWithCOREGrips( sequence & io_seqPlateSource, variable i_blnSourceSeqIncrement, sequence & io_seqPlateDestination, variable i_blnDestinaionSeqIncrement, variable i_fltGripHeight, variable i_fltGripWidth, variable i_fltOpenWidthBeforeGrip, variable i_blnCheckPlateExistsOnPutdown, variable i_blnEjectTool, variable i_intCOREGripFrontChannel ) void ;
private function _PlateChoice(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable strFunctionName;
  private dialog customDialog_1;
  private variable intSequencePositionDestinationPlate;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  _blnAbortFlag = 1;
  if (_blnPipettingStarted == 1)
  {
    if (_blnPipettingFinished == 0)
    {
      intSequencePositionDestinationPlate = ML_STAR.DWP24WorkingChannels.GetCurrentPosition();
      if (intSequencePositionDestinationPlate > 0)
      {
        MECC::TraceComment(Translate("Update sample tracker database\n\nCreate new mapping file each time that only contains destination plate BC and well\nImmediately write this info to the real output file and add in the source plate barcode and colony ID\n"));
        STCC::ResetFilterSequences();
        {
          variable _FilterIdsArray_2[];
          variable _ColumnIdsArray_2[];
          variable _ColumnNamesArray_2[];
          variable _ExperimentsArray_2[];
          _FilterIdsArray_2.SetSize(0);
          _ColumnNamesArray_2.SetSize(2);
          _ColumnIdsArray_2.SetSize(2);
          _ColumnNamesArray_2.SetAt(0, "TRackBC");
          _ColumnIdsArray_2.SetAt(0, 1);
          _ColumnNamesArray_2.SetAt(1, "TPositionId");
          _ColumnIdsArray_2.SetAt(1, 3);
          _ExperimentsArray_2.SetSize(0);
          STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.DWP24WorkingChannels, 1, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, _strMappingFileName, 1, 0, "", 0);
        }
      }
    }
    _MappingFileProcessing();
    F_Output();
  }
  EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, _strLightSource);
  EASYPICKII::MLSTAR::Light_Off(ML_STAR, _strLightSourceTop);
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  METROLOGICUTILITIESADVANCED_TGAC::terminate_Metrologic(ML_STAR, 4);
  if(0){
    STEPTRACKER::TERMINATE_ALL();
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function A_UserInput(  ) void {
  private variable retValueDialog;
  private variable strFunctionName;
  private variable loopCounter1;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private variable intMaxColonyPlates;
  private variable xls_ColonyPlateID;
  private variable strColonyPlateNumber;
  private file file1;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  _arrColonyPlateIDs.SetSize(0);
  file1.AddField("ColonyPlateID", xls_ColonyPlateID, hslString, 255);
  file1.SetDelimiter(",");
  if( 0 == file1.Open(strFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strFilePath, "HxMetEdCompCmd");
  }
  intMaxColonyPlates = SeqGetTotal(ML_STAR.SourcePlateTakeoutStack);
  {
    loopCounter1 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      strColonyPlateNumber = StrConcat2(Translate("Colony Plate "), loopCounter1);
      TrcTrace(Translate("strColonyPlateNumber = "), strColonyPlateNumber);
      TrcTrace(Translate("strColonyPlateID = "), xls_ColonyPlateID);
      _arrColonyPlateIDs.AddAsLast(xls_ColonyPlateID);
      _intNumberOfColonyPlates=_arrColonyPlateIDs.GetSize();
      if (_intNumberOfColonyPlates >= intMaxColonyPlates)
      {
        break;
      }
    }
  }
  Util2::Debug::TraceArray(Translate("Array containing the colony plate IDs (_arrColonyPlateIDs)"), _arrColonyPlateIDs);
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogProperty( "textBlock4.Text", _intNumberOfColonyPlates );
      customDialog_4.ShowCustomDialog();
      retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      _intMaxColoniesPerWell = customDialog_4.GetCustomDialogProperty( "numeric2.Value" );
      _intNumberOfDestinationPlates = _intMaxColoniesPerWell * intSourceWells;
      _intNumberOfDestinationPlates = _intNumberOfDestinationPlates / (intDestinationWells * 1.0);
      _intNumberOfDestinationPlates = _intNumberOfDestinationPlates * _intNumberOfColonyPlates;
      _intNumberOfDestinationPlates = MthCeiling(_intNumberOfDestinationPlates);
      if (_intNumberOfDestinationPlates > intMaxDestinationPlates)
      {
        customDialog_3.InitCustomDialog("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");
        customDialog_3.SetCustomDialogProperty( "textBlock2.Text", intMaxDestinationPlates );
        customDialog_3.SetCustomDialogProperty( "textBlock4.Text", strDestinationPlateDesc );
        customDialog_3.ShowCustomDialog();
      }
      else
      {
        break;
      }
    }
  }
  TrcTrace(Translate("_intNumberOfColonyPlates = "), _intNumberOfColonyPlates);
  TrcTrace(Translate("_intMaxColoniesPerWell = "), _intMaxColoniesPerWell);
}

private function E_ColonyPicking(  ) void {
  private variable loopCounter1;
  private variable intCOREGripFrontChannel;
  private variable strDWPBarcode;
  private variable strReturnValue;
  private variable intEasyPickIIRackID;
  private variable intRackWellsY;
  private variable intRackErrorCode;
  private variable strRackPictureFilename;
  private variable intRackWellsX;
  private variable intNumberOfPickedColonies;
  private variable loopCounterColoniesPickingCycle;
  private variable intNumberOfColoniesForNextCycle;
  private variable intDestinationCurrentPos;
  private variable intDestintionPositionsRemaining;
  private variable strChannelPatternForPicking;
  private variable intTotalNumberOfColonies;
  private variable strUsedChannelPattern;
  private variable intUsedNumberOfColonies;
  private variable arrEasyPickColonyPropertyID[];
  private variable arrintChannelToWell[];
  private variable arrColoniesPerWell[];
  private timer tmrDisplayWait;
  private variable strAspirateStepReturn;
  private variable strFunctionName;
  private variable intDestinationSequenceLength;
  private variable loopCounter2;
  private variable intRackWells;
  private variable intMaxColoniesPerPlate;
  private variable strColonyPlateBarcode;
  private variable intSizeOfArrIntChannelToWell;
  private variable loopCounter4;
  private variable loopCounter3;
  private variable intMediaTroughCounter;
  private variable strStepTrackerDescription;
  private variable intSizeOfArrIntChannelToWellMapping;
  private variable intSequencePositionDestinationPlate;
  private variable intDWPRef;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  _arrColonyPlateIDSuccessfullyPicked.SetSize(0);
  _arrMappingDWPBarcode.SetSize(0);
  _arrMappingDWPWell.SetSize(0);
  _arrMappingColonyPlateID.SetSize(0);
  _arrMappingColonyPlateWell.SetSize(0);
  _blnPipettingStarted = 1;
  intCOREGripFrontChannel = 8;
  intMediaTroughCounter = 2000;
  if(0){
    STEPTRACKER::START_Activity(Translate("Colony Picking"), Translate("Preparing 1st Plate with media"), 0, 1);
  }
  MECC::TraceComment(Translate("Get DWP from stack and read barcode"));
  METROLOGICUTILITIESADVANCED_TGAC::read_barcode_CORE_grips_nouser(ML_STAR.COREGripTool_OnWaste_1000ul_0001, intCOREGripFrontChannel, 0, ML_STAR.DestinationTakeoutStack, 1, ML_STAR.DestinationBCRead, ML_STAR.DestinationWorking96Head, 0, ML_STAR, _fltDWP24GripWidthCORE, _fltDWP24GripHeightCORE, strDWPBarcode, 0, 0);
  intDWPRef = 1;
  if (_blnSimulation == 1)
  {
    MECC::TraceComment(Translate("Simulation - generate random DWP barcode"));
    MthURandInit(100000, 999999);
    strDWPBarcode = MthURandDraw();
    strDWPBarcode = StrConcat2(Translate("BC"), strDWPBarcode);
  }
  strDWPBarcode = StrConcat4(strDWPBarcode, Translate("="), intDWPRef, Translate(""));
  TrcTrace(Translate("strDWPBarcode = "), strDWPBarcode);
  _arrIntChannelToWellMapping.SetSize(0);
  STCC::RemoveElementAtSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue);
  STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue, strDWPBarcode);
  if (intDestinationMediaVolume != 0)
  {
    MECC::TraceComment(Translate("Transfer media from the trough to the DWP"));
    {
      for(loopCounter3 = 0; loopCounter3 < _intMediaPipettingCycles;)
      {
        loopCounter3 = loopCounter3 + 1;
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        if (loopCounter3 == 1)
        {
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
        else
        {
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    intMediaTroughCounter = intMediaTroughCounter - intDestinationMediaVolume;
    if (intMediaTroughCounter < intDestinationMediaVolume)
    {
      SeqIncrement(_seqMediaTroughs, 96);
      intMediaTroughCounter = 2000;
    }
    PARK_96HEAD::move_COREii_96head_to_back(ML_STAR);
  }
  {
    for(loopCounter1 = 0; loopCounter1 < _intNumberOfColonyPlates;)
    {
      loopCounter1 = loopCounter1 + 1;
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
      TrcTrace(Translate("                                                                                                                              Colony Plate "), loopCounter1);
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
      strStepTrackerDescription = StrConcat4(Translate("Processing colony plate "), loopCounter1, Translate(""), Translate(""));
      if(0){
        STEPTRACKER::START_Activity(Translate("Colony Picking"), strStepTrackerDescription, 18, 1);
      }
      intSequencePositionDestinationPlate = ML_STAR.DestinationWorkingChannels.GetCurrentPosition();
      if (intSequencePositionDestinationPlate > 0)
      {
        MECC::TraceComment(Translate("Remove DWP so as not to confuse the sample tracking database"));
        STCC::RemoveElementAtSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue);
        STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue, strDWPBarcode);
      }
      _arrIntChannelToWellMapping.SetSize(0);
      MECC::TraceComment(Translate("Get colony plate from stack, read barcode and put in working position"));
      METROLOGICUTILITIESADVANCED_TGAC::read_barcode_CORE_grips_nouser(ML_STAR.COREGripTool_OnWaste_1000ul_0001, intCOREGripFrontChannel, 0, ML_STAR.SourcePlateTakeoutStack, 1, ML_STAR.SourceBCRead, ML_STAR.SourcePlateWorking, 0, ML_STAR, _fltColonyPlateGripWidthCORE, _fltColonyPlateGripHeightCORE, strColonyPlateBarcode, 0, 0);
      if (_blnSimulation == 1)
      {
        MECC::TraceComment(Translate("Simulation - generate colony plate barcode from the array of colony plate IDs"));
        strColonyPlateBarcode = _arrColonyPlateIDs.ElementAt( loopCounter1 -1);
      }
      TrcTrace(Translate("strColonyPlateBarcode = "), strColonyPlateBarcode);
      STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.SourcePlateWorking, -1, hslTrue, strColonyPlateBarcode);
      _strColonyPlateID = StrConcat4(_arrColonyPlateIDs.ElementAt( loopCounter1 -1), Translate("="), strColonyPlateBarcode, Translate(""));
      MECC::TraceComment(Translate("---------------------------------------------------------------File with matching barcode was found - this colony plate will be processed---------------------------------------------------------------"));
      MECC::TraceComment(Translate("Get lid from colony plate in working positions and put in park position"));
      _MovePlateWithCOREGrips(ML_STAR.SourcePlateWorking_Lid, 0, ML_STAR.SourcePlateLidPark, 0, _fltColonyPlateLidGripHeightCORE, _fltColonyPlateLidGripWidthCORE, _fltColonyPlateLidGripOpenWidthCORE, 0, 1, intCOREGripFrontChannel);
      MECC::TraceComment(Translate("Move arm out of the way"));
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      if (_EASYPICKII_SimulationMode == 0)
      {
        MECC::TraceComment(Translate("Show application main window."));
        strReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        if (strReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
          abort;
        }
      }
      MECC::TraceComment(Translate("Turn on the light table"));
      strReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, _strLightSource, _intLightIntensity);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      MECC::TraceComment(Translate("Switch on top light."));
      strReturnValue = EASYPICKII::MLSTAR::Light_On(ML_STAR, _strLightSourceTop, _intLightIntensity);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      if (_EASYPICKII_SimulationMode == 0)
      {
        MECC::TraceComment(Translate("Take picture."));
        TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
        strReturnValue = EASYPICKII_STEPS::easyStep_Colony_TakePicture(ML_STAR, _strCameraSettings, EASYPICKII::_HSLTRUE);
        if (strReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
          abort;
        }
      }
      else
      {
        strReturnValue = EASYPICKII::CAMERA::LoadPicture(Translate("settings\\ColonyDemo\\Demo_Plate_gray.tif"));
        if (strReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
          abort;
        }
      }
      MECC::TraceComment(Translate("Turn off the light table"));
      strReturnValue = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, _strLightSource);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      MECC::TraceComment(Translate("Turn off the top light"));
      strReturnValue = EASYPICKII::MLSTAR::Light_Off(ML_STAR, _strLightSourceTop);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      MECC::TraceComment(Translate("Analyse picture"));
      strReturnValue = EASYPICKII_STEPS::easyStep_Colony_Analyse(_strColoniesSettings, EASYPICKII::_HSLTRUE, _strColonyPlateID, _strColonyPlateDescription, intEasyPickIIRackID);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      MECC::TraceComment(Translate("Get the analysed result"));
      strReturnValue = EASYPICKII::DATABASE::GetEasyPickIIRack(intEasyPickIIRackID, _strColonyPlateID, strRackPictureFilename, intRackWellsX, intRackWellsY, intRackErrorCode, _strColonyPlateDescription);
      TrcTrace(Translate("_strColonyPlateID = "), _strColonyPlateID);
      TrcTrace(Translate("strRackPictureFilename = "), strRackPictureFilename);
      TrcTrace(Translate("intRackWellsX = "), intRackWellsX);
      TrcTrace(Translate("intRackWellsY = "), intRackWellsY);
      TrcTrace(Translate("intRackErrorCode = "), intRackErrorCode);
      TrcTrace(Translate("_strColonyPlateDescription = "), _strColonyPlateDescription);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      intMaxColoniesPerPlate = 0;
      intRackWells = intRackWellsX * intRackWellsY;
      arrColoniesPerWell.SetSize(0);
      {
        for(loopCounter2 = 0; loopCounter2 < intRackWells;)
        {
          loopCounter2 = loopCounter2 + 1;
          arrColoniesPerWell.AddAsLast(_intMaxColoniesPerWell);
          intMaxColoniesPerPlate = intMaxColoniesPerPlate + _intMaxColoniesPerWell;
        }
      }
      TrcTrace(Translate("intMaxColoniesPerPlate = "), intMaxColoniesPerPlate);
      Util2::Debug::TraceArray(Translate("arrColoniesPerWell"), arrColoniesPerWell);
      intNumberOfPickedColonies = 0;
      {
        loopCounterColoniesPickingCycle = 0;
        while (1 == 1)
        {
          loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
          TrcTrace(Translate("intMaxColoniesPerPlate is "), intMaxColoniesPerPlate);
          TrcTrace(Translate("intNumberOfPickedColonies is "), intNumberOfPickedColonies);
          intNumberOfColoniesForNextCycle = intMaxColoniesPerPlate - intNumberOfPickedColonies;
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          intDestinationCurrentPos = ML_STAR.DestinationWorkingChannels.GetCurrentPosition();
          TrcTrace(Translate("intDestinationCurrentPos is "), intDestinationCurrentPos);
          if (intDestinationCurrentPos == 0)
          {
            intSizeOfArrIntChannelToWellMapping=_arrIntChannelToWellMapping.GetSize();
            if (intSizeOfArrIntChannelToWellMapping > 0)
            {
              STCC::ResetFilterSequences();
              {
                variable _FilterIdsArray_5[];
                variable _ColumnIdsArray_5[];
                variable _ColumnNamesArray_5[];
                variable _ExperimentsArray_5[];
                _FilterIdsArray_5.SetSize(0);
                _ColumnNamesArray_5.SetSize(2);
                _ColumnIdsArray_5.SetSize(2);
                _ColumnNamesArray_5.SetAt(0, "TRackBC");
                _ColumnIdsArray_5.SetAt(0, 1);
                _ColumnNamesArray_5.SetAt(1, "TPositionId");
                _ColumnIdsArray_5.SetAt(1, 3);
                _ExperimentsArray_5.SetSize(0);
                STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.DestinationWorkingChannels, 1, _FilterIdsArray_5, 0, _ColumnIdsArray_5, _ColumnNamesArray_5, _ExperimentsArray_5, _strMappingFileName, 1, 0, "", 0);
              }
              _MappingFileProcessing();
            }
            MECC::TraceComment(Translate("Discard emptytip rack - if there are any to discard"));
            NTRDIRECTUSE::discard_empty_racks(ML_STAR, ML_STAR.NTR300ChannelsTipStack, ML_STAR.NTR300ChannelsTipRackStack, ML_STAR.NTR300Waste, 0, 300);
            MECC::TraceComment(Translate("Get DWP from working position and put in stack"));
            _MovePlateWithCOREGrips(ML_STAR.DestinationWorking96Head, 0, ML_STAR.DestinationPutbackStack, 1, _fltDWP24GripHeightCORE, _fltDWP24GripWidthCORE, _fltDWP24GripOpenWidthCORE, 1, 0, intCOREGripFrontChannel);
            SeqResetSequenceIndexes(ML_STAR.DestinationWorkingChannels);
            MECC::TraceComment(Translate("Get DWP from stack and read barcode"));
            METROLOGICUTILITIESADVANCED_TGAC::read_barcode_CORE_grips_nouser(ML_STAR.COREGripTool_OnWaste_1000ul_0001, intCOREGripFrontChannel, 0, ML_STAR.DestinationTakeoutStack, 1, ML_STAR.DestinationBCRead, ML_STAR.DestinationWorking96Head, 0, ML_STAR, _fltDWP24GripWidthCORE, _fltDWP24GripHeightCORE, strDWPBarcode, 0, 0);
            intDWPRef = intDWPRef + 1;
            if (_blnSimulation == 1)
            {
              MECC::TraceComment(Translate("Simulation - generate random DWP barcode"));
              MthURandInit(100000, 999999);
              strDWPBarcode = MthURandDraw();
              strDWPBarcode = StrConcat2(Translate("BC"), strDWPBarcode);
            }
            StrConcat4(strDWPBarcode, Translate("="), intDWPRef, Translate(""));
            TrcTrace(Translate("strDWPBarcode = "), strDWPBarcode);
            _arrIntChannelToWellMapping.SetSize(0);
            STCC::RemoveElementAtSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue);
            STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.DestinationWorkingChannels, -1, hslTrue, strDWPBarcode);
            _intMaxNumberOfChannelsForPicking = _intNoOfChannels;
            if (intDestinationMediaVolume != 0)
            {
              MECC::TraceComment(Translate("Transfer media from the trough to the DWP"));
              {
                for(loopCounter3 = 0; loopCounter3 < _intMediaPipettingCycles;)
                {
                  loopCounter3 = loopCounter3 + 1;
                  {
                    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
                  }
                  if (loopCounter3 == 1)
                  {
                    {
                      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
                    }
                  }
                  else
                  {
                    {
                      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
                    }
                  }
                }
              }
              ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
              intMediaTroughCounter = intMediaTroughCounter - intDestinationMediaVolume;
              if (intMediaTroughCounter < intDestinationMediaVolume)
              {
                SeqIncrement(_seqMediaTroughs, 96);
                intMediaTroughCounter = 2000;
              }
              PARK_96HEAD::move_COREii_96head_to_back(ML_STAR);
            }
          }
          else
          {
            intDestinationSequenceLength = SeqGetTotal(ML_STAR.DestinationWorkingChannels);
            TrcTrace(Translate("intDestinationSequenceLength is "), intDestinationSequenceLength);
            TrcTrace(Translate("intDestinationCurrentPos is "), intDestinationCurrentPos);
            intDestintionPositionsRemaining = intDestinationSequenceLength - intDestinationCurrentPos;
            intDestintionPositionsRemaining = intDestintionPositionsRemaining + 1;
            TrcTrace(Translate("intDestintionPositionsRemaining is "), intDestintionPositionsRemaining);
            if (intDestintionPositionsRemaining >= 8)
            {
              _intMaxNumberOfChannelsForPicking = _intNoOfChannels;
            }
            else
            {
              _intMaxNumberOfChannelsForPicking = intDestintionPositionsRemaining;
            }
            TrcTrace(Translate("_intMaxNumberOfChannelsForPicking is "), _intMaxNumberOfChannelsForPicking);
          }
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          TrcTrace(Translate("_intMaxNumberOfChannelsForPicking is "), _intMaxNumberOfChannelsForPicking);
          if (intNumberOfColoniesForNextCycle > _intMaxNumberOfChannelsForPicking)
          {
            intNumberOfColoniesForNextCycle = _intMaxNumberOfChannelsForPicking;
          }
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          MECC::TraceComment(Translate("Generate channel pattern for picking"));
          strChannelPatternForPicking = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(_intMaxNumberOfChannelsForPicking, _intNoOfChannels);
          MECC::TraceComment(Translate("Retrieve the next colony positions (sequence)"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions(ML_STAR, "easypickii_adjust_small_0001", strDestinationLabwareName, "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", intEasyPickIIRackID, arrColoniesPerWell, strChannelPatternForPicking, strUsedChannelPattern, intUsedNumberOfColonies, intTotalNumberOfColonies, seqColonySequence, arrEasyPickColonyPropertyID, arrintChannelToWell);
          TrcTrace(Translate("strUsedChannelPattern = "), strUsedChannelPattern);
          TrcTrace(Translate("intUsedNumberOfColonies = "), intUsedNumberOfColonies);
          TrcTrace(Translate("intTotalNumberOfColonies = "), intTotalNumberOfColonies);
          TrcTraceSequence(seqColonySequence);
          Util2::Debug::TraceArray(Translate("arrEasyPickColonyPropertyID"), arrEasyPickColonyPropertyID);
          Util2::Debug::TraceArray(Translate("arrintChannelToWell"), arrintChannelToWell);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Check for minimum found 1 colony, otherwise break the loop"));
          if (intTotalNumberOfColonies == 0)
          {
            if (_EASYPICKII_SimulationMode == 0)
            {
              EASYPICKII::GUI::Hide();
            }
            break;
          }
          MECC::TraceComment(Translate("Check for minimum 1 colony to be picked, otherwise break the loop"));
          if (intUsedNumberOfColonies == 0)
          {
            if (_EASYPICKII_SimulationMode == 0)
            {
              EASYPICKII::GUI::Hide();
            }
            break;
          }
          if( 0 == tmrDisplayWait.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmrDisplayWait.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (_EASYPICKII_SimulationMode == 0)
          {
            MECC::TraceComment(Translate("Hide application window."));
            EASYPICKII::GUI::Hide();
          }
          intSizeOfArrIntChannelToWell=arrintChannelToWell.GetSize();
          {
            for(loopCounter4 = 0; loopCounter4 < intSizeOfArrIntChannelToWell;)
            {
              loopCounter4 = loopCounter4 + 1;
              TrcTrace(Translate("arrintChannelToWell[loopCounter4] = "), arrintChannelToWell.ElementAt( loopCounter4 -1));
              if (arrintChannelToWell.ElementAt( loopCounter4 -1) > 0)
              {
                _arrIntChannelToWellMapping.AddAsLast(arrintChannelToWell.ElementAt( loopCounter4 -1));
              }
            }
          }
          NTRDIRECTUSE::gettips_channels(ML_STAR, ML_STAR.NTR300ChannelsTipStack, ML_STAR.NTR300ChannelsTipRackStack, ML_STAR.NTR300Waste, ML_STAR.NTR300Storage, _strTipCounterNTR300, 300, 1, 1, strUsedChannelPattern);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strAspirateStepReturn = arrRetValues[2];
          }
          if (intDestinationMediaVolume != 0)
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          MECC::TraceComment(Translate("Update the pipetting states of picked colonies"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(strAspirateStepReturn, arrEasyPickColonyPropertyID);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          TrcTrace(Translate("intNumberOfPickedColonies is "), intNumberOfPickedColonies);
          TrcTrace(Translate("intUsedNumberOfColonies is "), intUsedNumberOfColonies);
          intNumberOfPickedColonies = intNumberOfPickedColonies + intUsedNumberOfColonies;
          TrcTrace(Translate("intNumberOfPickedColonies is "), intNumberOfPickedColonies);
          if (intNumberOfPickedColonies >= intMaxColoniesPerPlate)
          {
            break;
          }
        }
      }
      MECC::TraceComment(Translate("Update sample tracker database\n\nCreate new mapping file each time that only contains destination plate BC and well\nImmediately write this info to the real output file and add in the source plate barcode and colony ID\n"));
      STCC::ResetFilterSequences();
      {
        variable _FilterIdsArray_6[];
        variable _ColumnIdsArray_6[];
        variable _ColumnNamesArray_6[];
        variable _ExperimentsArray_6[];
        _FilterIdsArray_6.SetSize(0);
        _ColumnNamesArray_6.SetSize(2);
        _ColumnIdsArray_6.SetSize(2);
        _ColumnNamesArray_6.SetAt(0, "TRackBC");
        _ColumnIdsArray_6.SetAt(0, 1);
        _ColumnNamesArray_6.SetAt(1, "TPositionId");
        _ColumnIdsArray_6.SetAt(1, 3);
        _ExperimentsArray_6.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.DestinationWorkingChannels, 1, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, _strMappingFileName, 1, 0, "", 0);
      }
      _MappingFileProcessing();
      _arrColonyPlateIDSuccessfullyPicked.AddAsLast(strColonyPlateBarcode);
      _MovePlateWithCOREGrips(ML_STAR.SourcePlateLidPark, 0, ML_STAR.SourcePlateWorking_Lid, 0, _fltColonyPlateLidGripHeightCORE, _fltColonyPlateLidGripWidthCORE, _fltColonyPlateLidGripOpenWidthCORE, 0, 0, intCOREGripFrontChannel);
      MECC::TraceComment(Translate("Get colony plate from working position and put in stack"));
      _MovePlateWithCOREGrips(ML_STAR.SourcePlateWorking, 0, ML_STAR.SourcePlatePutbackStack, 1, _fltColonyPlateGripHeightCORE, _fltColonyPlateGripWidthCORE, _fltColonyPlateGripOpenWidthCORE, 0, 0, intCOREGripFrontChannel);
      if (_EASYPICKII_SimulationMode == 0)
      {
        MECC::TraceComment(Translate("Hide application window."));
        EASYPICKII::GUI::Hide();
      }
    }
  }
  _blnPipettingFinished = 1;
  MECC::TraceComment(Translate("Get DWP from working position and put in stack"));
  _MovePlateWithCOREGrips(ML_STAR.DestinationWorking96Head, 0, ML_STAR.DestinationPutbackStack, 1, _fltDWP24GripHeightCORE, _fltDWP24GripWidthCORE, _fltDWP24GripOpenWidthCORE, 1, 0, intCOREGripFrontChannel);
  if(0){
    STEPTRACKER::START_Activity(Translate("Colony Picking"), Translate("Method ending"), 0, 1);
  }
  if (intDestinationMediaVolume != 0)
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
}

private function B_Definitions(  ) void {
  private variable strFunctionName;
  private dialog customDialog_7;
  private variable blnMappingFileDeletedError;
  private variable blnMappingFileExists;
  private variable strErrorMessage;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  _strTipCounterNTR300 = Translate("NTRChannels300");
  TrcTrace(Translate("_strTipCounterNTR300 = "), _strTipCounterNTR300);
  _fltVolumeMediaPipetting = intDestinationMediaVolume;
  if (_fltVolumeMediaPipetting > 1000.0)
  {
    _fltVolumeMediaPipetting = _fltVolumeMediaPipetting / (2 * 1.0);
    _intMediaPipettingCycles = 2;
  }
  else
  {
    _intMediaPipettingCycles = 1;
  }
  TrcTrace(Translate("_intMediaPipettingCycles = "), _intMediaPipettingCycles);
  TrcTrace(Translate("_fltVolumeMediaPipetting = "), _fltVolumeMediaPipetting);
  _strMappingFileName = Translate("MappingFileColonyPicking.xls");
  TrcTrace(Translate("_strMappingFileName = "), _strMappingFileName);
  _strMappingFilepath = FilGetLogFilesPath();
  _strMappingFilepath = StrConcat4(_strMappingFilepath, Translate("\\"), _strMappingFileName, Translate(""));
  TrcTrace(Translate("_strMappingFilepath = "), _strMappingFilepath);
  blnMappingFileExists = FileDirectoryLib::CheckIfFileExists(_strMappingFilepath);
  TrcTrace(Translate("blnMappingFileExists = "), blnMappingFileExists);
  if (blnMappingFileExists == 1)
  {
    blnMappingFileDeletedError = FileDirectoryLib::DeleteFile(_strMappingFilepath);
    TrcTrace(Translate("blnMappingFileDeletedError = "), blnMappingFileDeletedError);
    if (blnMappingFileDeletedError == 1)
    {
      strErrorMessage = StrConcat4(Translate("There was an error deleting the old mapping file\n\n"), _strMappingFilepath, Translate("\n\nThe method will abort"), Translate(""));
      customDialog_7.InitCustomDialog("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");
      customDialog_7.SetCustomDialogProperty( "textBlock3.Text", strErrorMessage );
      customDialog_7.ShowCustomDialog();
      abort;
    }
  }
  _blnConfigurationWithDialogs = 0;
  TrcTrace(Translate("_blnConfigurationWithDialogs = "), _blnConfigurationWithDialogs);
  _strLightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM4;
  TrcTrace(Translate("_strLightSource = "), _strLightSource);
  _strLightSourceTop = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV2_PWM1;
  TrcTrace(Translate("_strLightSourceTop = "), _strLightSourceTop);
  _intLightIntensity = 40;
  TrcTrace(Translate("_intLightIntensity = "), _intLightIntensity);
  _blnShowCameraLiveView = EASYPICKII::_HSLFALSE;
  TrcTrace(Translate("_blnShowCameraLiveView = "), _blnShowCameraLiveView);
  _strCameraSettings = "Default";
  _strColoniesSettings = Translate("Default");
  _strColonyPlateDescription = strSourcePlateDesc;
  TrcTrace(Translate("_strColonyPlateDescription = "), _strColonyPlateDescription);
  _fltDWP24GripHeightCORE = intDestinationGripHeightCORE;
  _fltDWP24GripWidthCORE = intDestinationGripWidthCORE;
  _fltDWP24GripOpenWidthCORE = intDestinationGripOpenWidthCORE;
  _fltDWP24LidGripHeightCORE = intDestinationLidGripHeightCORE;
  _fltDWP24LidGripWidthCORE = intDestinationLidGripWidthCORE;
  _fltDWP24LidGripOpenWidthCORE = intDestinationLidGripOpenWidthCORE;
  _fltColonyPlateGripHeightCORE = intSourceGripHeightCORE;
  _fltColonyPlateGripWidthCORE = intSourceGripWidthCORE;
  _fltColonyPlateGripOpenWidthCORE = intSourceGripOpenWidthCORE;
  _fltColonyPlateLidGripHeightCORE = intSourceLidGripHeightCORE;
  _fltColonyPlateLidGripWidthCORE = intSourceLidGripWidthCORE;
  _fltColonyPlateLidGripOpenWidthCORE = intSourceLidGripOpenWidthCORE;
  _fltMediaTroughLidGripHeightCORE = 4.0;
  _fltMediaTroughLidGripWidthCORE = 84.5;
  _fltMediaTroughLidGripOpenWidthCORE = 90.0;
}

private function _MovePlateWithCOREGrips( sequence & io_seqPlateSource, variable i_blnSourceSeqIncrement, sequence & io_seqPlateDestination, variable i_blnDestinaionSeqIncrement, variable i_fltGripHeight, variable i_fltGripWidth, variable i_fltOpenWidthBeforeGrip, variable i_blnCheckPlateExistsOnPutdown, variable i_blnEjectTool, variable i_intCOREGripFrontChannel ) void {
  private variable strFunctionName;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-------------------------------------------------------------------- "), strFunctionName, Translate(" --------------------------------------------------------------------"), Translate(""));
  TrcTrace(Translate("i_fltGripHeight = "), i_fltGripHeight);
  TrcTrace(Translate("i_fltGripWidth = "), i_fltGripWidth);
  TrcTrace(Translate("i_fltOpenWidthBeforeGrip = "), i_fltOpenWidthBeforeGrip);
  TrcTrace(Translate("i_fltOpenWidthBeforeGrip = "), i_blnCheckPlateExistsOnPutdown);
  TrcTrace(Translate("i_blnEjectTool = "), i_blnEjectTool);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
}

private function C_Initialise(  ) void {
  private variable strReturnValue;
  private variable strFunctionName;
  private dialog customDialog_8;
  private variable loopCounter2;
  private variable intDialogReturn;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  _blnSimulation = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulation = "), _blnSimulation);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  PARK_96HEAD::move_COREii_96head_to_back(ML_STAR);
  MECC::TraceComment(Translate("Init easy pick"));
  strReturnValue = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
  if (strReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
    abort;
  }
  _intNoOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
  _intMaxNumberOfChannelsForPicking = _intNoOfChannels;
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      MECC::TraceComment(Translate("Select colonies configuration and load it"));
      strReturnValue = EASYPICKII::SETTINGS::SelectColonySettings(_strColoniesSettings, _strColoniesSettings);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      MECC::TraceComment(Translate("Select camera settings"));
      strReturnValue = EASYPICKII::SETTINGS::SelectCameraSettings(_strCameraSettings, _strCameraSettings);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      customDialog_8.InitCustomDialog("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");
      customDialog_8.SetCustomDialogProperty( "textBlock4.Text", _strCameraSettings );
      customDialog_8.SetCustomDialogProperty( "textBlock5.Text", _strColoniesSettings );
      customDialog_8.ShowCustomDialog();
      intDialogReturn = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      if (intDialogReturn == 1)
      {
        TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
        TrcTrace(Translate("_strColoniesSettings = "), _strColoniesSettings);
        break;
      }
    }
  }
  MECC::TraceComment(Translate("Init Kenny"));
  METROLOGICUTILITIESADVANCED_TGAC::initialise_Metrologic(ML_STAR, 4);
}

private function D_LoadInstructions(  ) void {
  private variable intTipsNeeded;
  private variable strLoadMessage;
  private variable retValueDialog;
  private variable loopCounter1;
  private dialog customDialog_9;
  private variable strFunctionName;
  private variable strColonyPlateNumber;
  private variable strColonyPlateInstructions;
  private variable strColonyPlateID;
  private variable intMod;
  private variable intPositionsToRemoveFromSeq;
  private variable intPositionToRemove;
  private variable intSizeOfArrColonyPlateIDs;
  private variable loopCounter2;
  private variable intSizeOfArrColonyPlateToBeIgnored;
  private variable intDropDownSelectedIndex;
  private variable intSizeOfArrColonyPlateToBeProcessed;
  private variable intDialogReturn;
  private variable arrColonyPlateToBeProcessed[];
  private variable arrColonyPlateToBeIgnored[];
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable intNumberMediaTroughsNeeded;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  intPositionsToRemoveFromSeq = intMaxSourcePlates - _intNumberOfColonyPlates;
  {
    for(loopCounter1 = 0; loopCounter1 < intPositionsToRemoveFromSeq;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 <= intSourceStackHeight)
      {
        intPositionToRemove = intSourceStackHeight + 1;
      }
      else
      {
        intPositionToRemove = 1;
      }
      SeqRemoveAt(ML_STAR.SourcePlateTakeoutStack, intPositionToRemove);
    }
  }
  if(0){
    _arrColonyPlateIDs.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < _intNumberOfColonyPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        strColonyPlateNumber = StrConcat2(Translate("Colony Plate "), loopCounter1);
        strColonyPlateInstructions = Translate("Scan the colony plate barcode");
        customDialog_10.InitCustomDialog("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");
        customDialog_10.SetCustomDialogProperty( "textBlock3.Text", strColonyPlateInstructions );
        customDialog_10.SetCustomDialogProperty( "textBlock2.Text", strColonyPlateNumber );
        customDialog_10.ShowCustomDialog();
        retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        strColonyPlateID = customDialog_10.GetCustomDialogProperty( "textBox2.Text" );
        TrcTrace(Translate("strColonyPlateNumber = "), strColonyPlateNumber);
        TrcTrace(Translate("strColonyPlateID = "), strColonyPlateID);
        _arrColonyPlateIDs.AddAsLast(strColonyPlateID);
      }
    }
    Util2::Debug::TraceArray(Translate("Array containing the colony plate IDs (_arrColonyPlateIDs)"), _arrColonyPlateIDs);
  }
  strLoadMessage = StrConcat8(Translate("\n\nLoad "), _intNumberOfColonyPlates, Translate(" barcoded "), strSourcePlateDesc, Translate(" colony plates in the flashing positions in the stack, starting in position 2 working forwards."), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONSV2::load_instructions(ML_STAR, ML_STAR.SourcePlateTakeoutStack, strLoadMessage);
  intSizeOfArrColonyPlateIDs=_arrColonyPlateIDs.GetSize();
  if(0){
    _arrColonyPlateIDFilesExist.SetSize(0);
  }
  arrColonyPlateToBeProcessed.SetSize(0);
  arrColonyPlateToBeIgnored.SetSize(0);
  {
    for(loopCounter2 = 0; loopCounter2 < intSizeOfArrColonyPlateIDs;)
    {
      loopCounter2 = loopCounter2 + 1;
      arrColonyPlateToBeProcessed.AddAsLast(_arrColonyPlateIDs.ElementAt( loopCounter2 -1));
    }
  }
  intSizeOfArrColonyPlateToBeProcessed=arrColonyPlateToBeProcessed.GetSize();
  TrcTrace(Translate("intSizeOfArrColonyPlateToBeProcessed = "), intSizeOfArrColonyPlateToBeProcessed);
  if (intSizeOfArrColonyPlateToBeProcessed > 0)
  {
    Util2::Debug::TraceArray(Translate("Array containing the colony plate(s) that will be processed (arrColonyPlateToBeProcessed)"), arrColonyPlateToBeProcessed);
  }
  intSizeOfArrColonyPlateToBeIgnored=arrColonyPlateToBeIgnored.GetSize();
  TrcTrace(Translate("intSizeOfArrColonyPlateToBeIgnored = "), intSizeOfArrColonyPlateToBeIgnored);
  if (intSizeOfArrColonyPlateToBeIgnored > 0)
  {
    Util2::Debug::TraceArray(Translate("Array containing the colony plate(s) that will NOT be processed (arrColonyPlateToBeIgnored)"), arrColonyPlateToBeIgnored);
  }
  intDropDownSelectedIndex = 1;
  if (intSizeOfArrColonyPlateToBeProcessed > 0)
  {
    if (intSizeOfArrColonyPlateToBeIgnored > 0)
    {
      customDialog_13.InitCustomDialog("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");
      customDialog_13.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrColonyPlateToBeProcessed );
      customDialog_13.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrColonyPlateToBeIgnored );
      customDialog_13.SetCustomDialogProperty( "comboBox1.SelectedIndex", intDropDownSelectedIndex );
      customDialog_13.SetCustomDialogProperty( "comboBox2.SelectedIndex", intDropDownSelectedIndex );
      customDialog_13.ShowCustomDialog();
      intDialogReturn = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      if (intDialogReturn == 2)
      {
        abort;
      }
    }
    else
    {
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
    }
  }
  else
  {
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    abort;
  }
  intTipsNeeded = _intMaxColoniesPerWell * intSourceWells;
  intTipsNeeded = intTipsNeeded * intSizeOfArrColonyPlateToBeProcessed;
  NTRDIRECTUSE::load_GUI(ML_STAR, ML_STAR.NTR300ChannelsTipStack, ML_STAR.NTR300ChannelsTipRackStack, ML_STAR.NTR300Storage, Translate("tracks 64-69"), intTipsNeeded, 300, 2, _strTipCounterNTR300);
  if (intDestinationMediaVolume != 0)
  {
    LOAD_INSTRUCTIONSV2::load_instructions(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTip, Translate("\n\nLoad a full rack of 1000 µl tips with a drip pan underneath, in the flashing position"));
  }
  _intNumberOfDestinationPlates = _intMaxColoniesPerWell * intSourceWells;
  _intNumberOfDestinationPlates = _intNumberOfDestinationPlates / (intDestinationWells * 1.0);
  _intNumberOfDestinationPlates = _intNumberOfDestinationPlates * intSizeOfArrColonyPlateToBeProcessed;
  _intNumberOfDestinationPlates = MthCeiling(_intNumberOfDestinationPlates);
  TrcTrace(Translate("_intNumberOfDestinationPlates = "), _intNumberOfDestinationPlates);
  intPositionsToRemoveFromSeq = intMaxDestinationPlates - _intNumberOfDestinationPlates;
  {
    for(loopCounter1 = 0; loopCounter1 < intPositionsToRemoveFromSeq;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 <= intDestinationStackHeight)
      {
        intPositionToRemove = intDestinationStackHeight + 1;
      }
      else
      {
        intPositionToRemove = 1;
      }
      SeqRemoveAt(ML_STAR.DestinationTakeoutStack, intPositionToRemove);
    }
  }
  if(0){
    intPositionsToRemoveFromSeq = intMaxDestinationPlates - _intNumberOfDestinationPlates;
    intMod = _intNumberOfDestinationPlates % intDestinationStackHeight;
    {
      for(loopCounter1 = 0; loopCounter1 < intPositionsToRemoveFromSeq;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == intPositionsToRemoveFromSeq)
        {
          if (intMod == 0)
          {
            intPositionToRemove = intMaxDestinationPlates + 1;
            intPositionToRemove = intPositionToRemove - loopCounter1;
          }
          else
          {
            intPositionToRemove = intMaxDestinationPlates - loopCounter1;
          }
        }
        else
        {
          intPositionToRemove = intMaxDestinationPlates + 1;
          intPositionToRemove = intPositionToRemove - loopCounter1;
        }
        SeqRemoveAt(ML_STAR.DestinationTakeoutStack, intPositionToRemove);
      }
    }
  }
  strLoadMessage = StrConcat8(Translate("\n\nLoad "), _intNumberOfDestinationPlates, Translate(" barcoded, "), strDestinationPlateDesc, Translate("  in the flashing positions\n\nFill from back to front, and if necessary, left to right."), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONSV2::load_instructions(ML_STAR, ML_STAR.DestinationTakeoutStack, strLoadMessage);
  intNumberMediaTroughsNeeded = _intNumberOfDestinationPlates * intDestinationMediaVolume;
  intNumberMediaTroughsNeeded = intNumberMediaTroughsNeeded / (2000 * 1.0);
  intNumberMediaTroughsNeeded = MthCeiling(intNumberMediaTroughsNeeded);
  TrcTrace(Translate("intNumberMediaTroughsNeeded = "), intNumberMediaTroughsNeeded);
  strLoadMessage = StrConcat8(Translate("\n\nLoad "), intNumberMediaTroughsNeeded, Translate(" troughs of media in the flashing positions.\n\nUse the flat plate adapters in these positions."), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  if (intNumberMediaTroughsNeeded == 1)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1);
  }
  if (intNumberMediaTroughsNeeded == 2)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1to2);
  }
  if (intNumberMediaTroughsNeeded == 3)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1to3);
  }
  if (intNumberMediaTroughsNeeded == 4)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1to4);
  }
  if (intNumberMediaTroughsNeeded == 5)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1to5);
  }
  if (intNumberMediaTroughsNeeded == 6)
  {
    SeqCopySequence(_seqMediaTroughs, ML_STAR.MediaTrough_1to6);
  }
  if (intDestinationMediaVolume != 0)
  {
    LOAD_INSTRUCTIONSV2::load_instructions(ML_STAR, _seqMediaTroughs, strLoadMessage);
  }
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function G_DeInitialise(  ) void {
  private variable strFunctionName;
  private dialog customDialog_14;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  METROLOGICUTILITIESADVANCED_TGAC::terminate_Metrologic(ML_STAR, 4);
  if(0){
    STEPTRACKER::TERMINATE_ALL();
  }
  customDialog_14.InitCustomDialog("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");
  customDialog_14.ShowCustomDialog();
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function F_Output(  ) void {
  private variable loopCounter1;
  private variable strTime;
  private variable strDate;
  private variable strOutputFilepath;
  private variable strOutputSRackBC;
  private variable strOutputTRackBC;
  private variable strOutputTPositionId;
  private file hdlOutputFile;
  private variable intSerialNumber;
  private variable intMappingDWPBarcodeArraySize;
  private variable strFunctionName;
  private variable strOutputSPositionID;
  private variable intStrLen;
  private variable strOutputTRackRef;
  private variable strOutputSRackBCFile;
  private variable intStrPos;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("=============================================== "), strFunctionName, Translate(" ==============================================="), Translate(""));
  Util2::Debug::TraceArray_4(Translate("Arrays used to generate output file (_arrMappingDWPBarcode, _arrMappingDWPWell, _arrMappingColonyID, _arrMappingColonyPlateWell)"), _arrMappingDWPBarcode, _arrMappingDWPWell, _arrMappingColonyPlateID, _arrMappingColonyPlateWell);
  intMappingDWPBarcodeArraySize=_arrMappingDWPBarcode.GetSize();
  strOutputFilepath = Translate("C:\\Results\\ColonyPicking");
  intSerialNumber = GET_SERIAL_NUMBER::Get_SerialNumber_STAR(ML_STAR);
  strOutputFilepath = StrConcat4(strOutputFilepath, Translate("_"), intSerialNumber, Translate("_"));
  strDate = TimGetFormattedDate(Translate("%Y%m%d"));
  strTime = TimGetFormattedTime(Translate("%H%M"));
  strOutputFilepath = StrConcat4(strOutputFilepath, strDate, Translate("_"), strTime);
  if (_blnAbortFlag == 1)
  {
    strOutputFilepath = StrConcat4(strOutputFilepath, Translate("_ABORTED"), Translate(""), Translate(""));
  }
  strOutputFilepath = StrConcat4(strOutputFilepath, Translate(".csv"), Translate(""), Translate(""));
  TrcTrace(Translate("strOutputFilepath is "), strOutputFilepath);
  SeqResetSequenceIndexes(ML_STAR.SourcePlateWorking);
  hdlOutputFile.AddField("DestinationPlateBC", strOutputTRackBC, hslString, 255);
  hdlOutputFile.AddField("DestinationPlateRef", strOutputTRackRef, hslString, 255);
  hdlOutputFile.AddField("DestinationWell", strOutputTPositionId, hslString, 255);
  hdlOutputFile.AddField("SourcePlateBC", strOutputSRackBC, hslString, 255);
  hdlOutputFile.AddField("SourcePlateBCfromFile", strOutputSRackBCFile, hslString, 255);
  hdlOutputFile.AddField("SourceWell", strOutputSPositionID, hslString, 255);
  hdlOutputFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlOutputFile.Open(strOutputFilepath, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strOutputFilepath, "HxMetEdCompCmd");
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intMappingDWPBarcodeArraySize;)
    {
      loopCounter1 = loopCounter1 + 1;
      intStrPos = StrFind(_arrMappingDWPBarcode.ElementAt( loopCounter1 -1), Translate("="));
      strOutputTRackBC = StrLeft(_arrMappingDWPBarcode.ElementAt( loopCounter1 -1), intStrPos);
      intStrLen = StrGetLength(_arrMappingDWPBarcode.ElementAt( loopCounter1 -1));
      intStrPos = intStrLen - intStrPos;
      intStrPos = intStrPos - 1;
      strOutputTRackRef = StrRight(_arrMappingDWPBarcode.ElementAt( loopCounter1 -1), intStrPos);
      A1_TO_A01_AND_VICE_VERSA::A1_to_A01(_arrMappingDWPWell.ElementAt( loopCounter1 -1));
      strOutputTPositionId = _arrMappingDWPWell.ElementAt( loopCounter1 -1);
      intStrPos = StrFind(_arrMappingColonyPlateID.ElementAt( loopCounter1 -1), Translate("="));
      strOutputSRackBCFile = StrLeft(_arrMappingColonyPlateID.ElementAt( loopCounter1 -1), intStrPos);
      intStrLen = StrGetLength(_arrMappingColonyPlateID.ElementAt( loopCounter1 -1));
      intStrPos = intStrLen - intStrPos;
      intStrPos = intStrPos - 1;
      strOutputSRackBC = StrRight(_arrMappingColonyPlateID.ElementAt( loopCounter1 -1), intStrPos);
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 1)
      {
        strOutputSPositionID = Translate("A01");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 2)
      {
        strOutputSPositionID = Translate("A02");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 3)
      {
        strOutputSPositionID = Translate("A03");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 4)
      {
        strOutputSPositionID = Translate("A04");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 5)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("A05");
        }
        else
        {
          strOutputSPositionID = Translate("B01");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 6)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("A06");
        }
        else
        {
          strOutputSPositionID = Translate("B02");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 7)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B01");
        }
        else
        {
          strOutputSPositionID = Translate("B03");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 8)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B02");
        }
        else
        {
          strOutputSPositionID = Translate("B04");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 9)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B03");
        }
        else
        {
          strOutputSPositionID = Translate("C01");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 10)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B04");
        }
        else
        {
          strOutputSPositionID = Translate("C02");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 11)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B05");
        }
        else
        {
          strOutputSPositionID = Translate("C03");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 12)
      {
        if (intDestinationWells == 24)
        {
          strOutputSPositionID = Translate("B06");
        }
        else
        {
          strOutputSPositionID = Translate("C04");
        }
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 13)
      {
        strOutputSPositionID = Translate("C01");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 14)
      {
        strOutputSPositionID = Translate("C02");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 15)
      {
        strOutputSPositionID = Translate("C03");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 16)
      {
        strOutputSPositionID = Translate("C04");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 17)
      {
        strOutputSPositionID = Translate("C05");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 18)
      {
        strOutputSPositionID = Translate("C06");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 19)
      {
        strOutputSPositionID = Translate("D01");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 20)
      {
        strOutputSPositionID = Translate("D02");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 21)
      {
        strOutputSPositionID = Translate("D03");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 22)
      {
        strOutputSPositionID = Translate("D04");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 23)
      {
        strOutputSPositionID = Translate("D05");
      }
      if (_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1) == 24)
      {
        strOutputSPositionID = Translate("D06");
      }
      ML_STAR.SourcePlateWorking.SetCurrentPosition(_arrMappingColonyPlateWell.ElementAt( loopCounter1 -1));
      strOutputSPositionID = SeqGetPositionId(ML_STAR.SourcePlateWorking);
      A1_TO_A01_AND_VICE_VERSA::A1_to_A01(strOutputSPositionID);
      if( 0 == hdlOutputFile.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if( 0 != hdlOutputFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlOutputFile.RemoveFields();
}

private function _MappingFileProcessing(  ) void {
  private variable strMappingTPositionId;
  private variable loopCounter1;
  private variable strMappingTRackBC;
  private file hdlMappingFile;
  private variable strFunctionName;
  strFunctionName = "";
  strFunctionName = GetFunctionName();
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-------------------------------------------------------------------- "), strFunctionName, Translate(" --------------------------------------------------------------------"), Translate(""));
  TrcTrace(Translate("_strColonyPlateID = "), _strColonyPlateID);
  Util2::Debug::TraceArray(Translate("_arrIntChannelToWellMapping"), _arrIntChannelToWellMapping);
  hdlMappingFile.AddField("TRackBC", strMappingTRackBC, hslString, 255);
  hdlMappingFile.AddField("TPositionId", strMappingTPositionId, hslString, 255);
  if( 0 == hdlMappingFile.Open(_strMappingFilepath + " " + "ReportMapping$", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strMappingFilepath, "HxMetEdCompCmd");
  }
  {
    loopCounter1 = 0;
    while (
       (hdlMappingFile.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == hdlMappingFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _arrMappingDWPBarcode.AddAsLast(strMappingTRackBC);
      _arrMappingDWPWell.AddAsLast(strMappingTPositionId);
      _arrMappingColonyPlateID.AddAsLast(_strColonyPlateID);
      _arrMappingColonyPlateWell.AddAsLast(_arrIntChannelToWellMapping.ElementAt( loopCounter1 -1));
    }
  }
  if( 0 != hdlMappingFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlMappingFile.RemoveFields();
  Util2::Debug::TraceArray_4(Translate("Arrays generated from mapping file (_arrMappingDWPBarcode, _arrMappingDWPWell, _arrMappingColonyPlateID, _arrMappingColonyPlateWell)"), _arrMappingDWPBarcode, _arrMappingDWPWell, _arrMappingColonyPlateID, _arrMappingColonyPlateWell);
}

private function _PlateChoice(  ) void {
  private dialog customDialog_15;
  private variable intSource;
  private variable intDestination;
  private variable bolSourceBarcodePos;
  private variable bolDestinationBarcodePos;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private dialog customDialog_18;
  intSource = 1;
  intDestination = 1;
  intSourceWells = 1;
  intDestinationWells = 1;
  strSourcePlateDesc = Translate("Type of source plate");
  strDestinationPlateDesc = Translate("Type of destination plate");
  bolDestinationBarcodePos = 1;
  bolSourceBarcodePos = 1;
  intMaxSourcePlates = 1;
  intMaxDestinationPlates = 1;
  intDestinationMediaVolume = 0;
  customDialog_15.InitCustomDialog("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");
  customDialog_15.SetCustomDialogProperty( "comboBox1.SelectedIndex", intSource );
  customDialog_15.SetCustomDialogProperty( "comboBox2.SelectedIndex", intDestination );
  customDialog_15.SetCustomDialogProperty( "radioButton1.IsChecked", bolSourceBarcodePos );
  customDialog_15.SetCustomDialogProperty( "radioButton3.IsChecked", bolDestinationBarcodePos );
  customDialog_15.ShowCustomDialog();
  intSource = customDialog_15.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
  intDestination = customDialog_15.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
  bolSourceBarcodePos = customDialog_15.GetCustomDialogProperty( "radioButton1.IsChecked" );
  bolDestinationBarcodePos = customDialog_15.GetCustomDialogProperty( "radioButton3.IsChecked" );
  if (intSource == 1)
  {
    strSourcePlateDesc = Translate("Single Well Plate");
    strDestinationLabwareName = Translate("Nunc_1WellDish");
    intSourceWells = 1;
    intSourceStackHeight = 6;
    intSourceGripHeightCORE = 10.5;
    intSourceGripWidthCORE = 82;
    intSourceGripOpenWidthCORE = 90.0;
    intSourceLidGripHeightCORE = 4.0;
    intSourceLidGripWidthCORE = 83.5;
    intSourceLidGripOpenWidthCORE = 90.0;
    if (bolSourceBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Nunc_8WellBCReadWestSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Nunc_8WellBCReadWestSide_lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Nunc_8WellBCReadEastSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Nunc_8WellBCReadEastSide_lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.SourcePlateLidPark, ML_STAR.Nunc_8WellPlateLidPark);
    SeqCopySequence(ML_STAR.SourcePlatePutbackStack, ML_STAR.Nunc_8WellPutbackStack);
    SeqCopySequence(ML_STAR.SourcePlateTakeoutStack, ML_STAR.Nunc_8WellPlateTakeoutStack);
    SeqCopySequence(ML_STAR.SourcePlateWorking, ML_STAR.Nunc_8WellPlateWorking);
    SeqCopySequence(ML_STAR.SourcePlateWorking_Lid, ML_STAR.Nunc_8WellPlateWorking_Lid);
  }
  if (intSource == 2)
  {
    strSourcePlateDesc = Translate("8 Well Plate");
    strDestinationLabwareName = Translate("Nunc_8WellDishWorking");
    intSourceWells = 8;
    intSourceStackHeight = 6;
    intSourceGripHeightCORE = 10.5;
    intSourceGripWidthCORE = 82;
    intSourceGripOpenWidthCORE = 90.0;
    intSourceLidGripHeightCORE = 4.0;
    intSourceLidGripWidthCORE = 83.5;
    intSourceLidGripOpenWidthCORE = 90.0;
    if (bolSourceBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Nunc_8WellBCReadWestSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Nunc_8WellBCReadWestSide_lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Nunc_8WellBCReadEastSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Nunc_8WellBCReadEastSide_lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.SourcePlateLidPark, ML_STAR.Nunc_8WellPlateLidPark);
    SeqCopySequence(ML_STAR.SourcePlatePutbackStack, ML_STAR.Nunc_8WellPutbackStack);
    SeqCopySequence(ML_STAR.SourcePlateTakeoutStack, ML_STAR.Nunc_8WellPlateTakeoutStack);
    SeqCopySequence(ML_STAR.SourcePlateWorking, ML_STAR.Nunc_8WellPlateWorking);
    SeqCopySequence(ML_STAR.SourcePlateWorking_Lid, ML_STAR.Nunc_8WellPlateWorking_Lid);
  }
  if (intSource == 3)
  {
    strSourcePlateDesc = Translate("6 Well Plate");
    strDestinationLabwareName = Translate("Gre_24PlateWorking");
    intSourceWells = 6;
    intSourceStackHeight = 4;
    intSourceGripHeightCORE = 12.0;
    intSourceGripWidthCORE = 84.5;
    intSourceGripOpenWidthCORE = 89.0;
    intSourceLidGripHeightCORE = 1.0;
    intSourceLidGripWidthCORE = 84.3;
    intSourceLidGripOpenWidthCORE = 89.0;
    if (bolSourceBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadWestSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadWestSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadEastSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadEastSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.SourcePlateLidPark, ML_STAR.Gre_24PlateLidPark);
    SeqCopySequence(ML_STAR.SourcePlatePutbackStack, ML_STAR.Gre_24PlatePutbackStack);
    SeqCopySequence(ML_STAR.SourcePlateTakeoutStack, ML_STAR.Gre_24PlateTakeoutStack);
    SeqCopySequence(ML_STAR.SourcePlateWorking, ML_STAR.Gre_24PlateWorking);
    SeqCopySequence(ML_STAR.SourcePlateWorking_Lid, ML_STAR.Gre_24PlateWorking_lid);
  }
  if (intSource == 4)
  {
    strSourcePlateDesc = Translate("12 Well Plate");
    strDestinationLabwareName = Translate("Gre_24PlateWorking");
    intSourceWells = 12;
    intSourceStackHeight = 4;
    intSourceGripHeightCORE = 12.0;
    intSourceGripWidthCORE = 84.5;
    intSourceGripOpenWidthCORE = 89.0;
    intSourceLidGripHeightCORE = 1.0;
    intSourceLidGripWidthCORE = 84.3;
    intSourceLidGripOpenWidthCORE = 89.0;
    if (bolSourceBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadWestSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadWestSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadEastSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadEastSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.SourcePlateLidPark, ML_STAR.Gre_24PlateLidPark);
    SeqCopySequence(ML_STAR.SourcePlatePutbackStack, ML_STAR.Gre_24PlatePutbackStack);
    SeqCopySequence(ML_STAR.SourcePlateTakeoutStack, ML_STAR.Gre_24PlateTakeoutStack);
    SeqCopySequence(ML_STAR.SourcePlateWorking, ML_STAR.Gre_24PlateWorking);
    SeqCopySequence(ML_STAR.SourcePlateWorking_Lid, ML_STAR.Gre_24PlateWorking_lid);
  }
  if (intSource == 5)
  {
    strSourcePlateDesc = Translate("24 Well Plate");
    strDestinationLabwareName = Translate("Gre_24PlateWorking");
    intSourceWells = 24;
    intSourceStackHeight = 4;
    intSourceGripHeightCORE = 12.0;
    intSourceGripWidthCORE = 84.5;
    intSourceGripOpenWidthCORE = 89.0;
    intSourceLidGripHeightCORE = 1.0;
    intSourceLidGripWidthCORE = 83.3;
    intSourceLidGripOpenWidthCORE = 89.0;
    if (bolSourceBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadWestSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadWestSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.SourceBCRead, ML_STAR.Gre_24BCReadEastSide);
      SeqCopySequence(ML_STAR.SourceBCRead_Lid, ML_STAR.Gre_24BCReadEastSide_Lid);
      TrcTrace(Translate("Source barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.SourcePlateLidPark, ML_STAR.Gre_24PlateLidPark);
    SeqCopySequence(ML_STAR.SourcePlatePutbackStack, ML_STAR.Gre_24PlatePutbackStack);
    SeqCopySequence(ML_STAR.SourcePlateTakeoutStack, ML_STAR.Gre_24PlateTakeoutStack);
    SeqCopySequence(ML_STAR.SourcePlateWorking, ML_STAR.Gre_24PlateWorking);
    SeqCopySequence(ML_STAR.SourcePlateWorking_Lid, ML_STAR.Gre_24PlateWorking_lid);
  }
  if (intDestination == 1)
  {
    intDestinationWells = 24;
    strDestinationPlateDesc = Translate("24 Well Plate");
    intDestinationGripHeightCORE = 8.0;
    intDestinationGripWidthCORE = 79.5;
    intDestinationGripOpenWidthCORE = 90.0;
    intDestinationLidGripHeightCORE = 4.0;
    intDestinationLidGripWidthCORE = 84.0;
    intDestinationLidGripOpenWidthCORE = 90.0;
    intDestinationStackHeight = 2;
    customDialog_16.InitCustomDialog("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");
    customDialog_16.SetCustomDialogProperty( "numeric1.Value", intDestinationMediaVolume );
    customDialog_16.SetCustomDialogProperty( "textBlock1.Text", strDestinationPlateDesc );
    customDialog_16.ShowCustomDialog();
    intDestinationMediaVolume = customDialog_16.GetCustomDialogProperty( "numeric1.Value" );
    intDestinationMediaVolume = intDestinationMediaVolume * intDestinationWells;
    intDestinationMediaVolume = intDestinationMediaVolume / (96 * 1.0);
    if (bolDestinationBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR.DWP24BCReadWestSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR.DWP24BCReadEastSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.DestinationPutbackStack, ML_STAR.DWP24PutbackStack);
    SeqCopySequence(ML_STAR.DestinationTakeoutStack, ML_STAR.DWP24TakeoutStack);
    SeqCopySequence(ML_STAR.DestinationWorking96Head, ML_STAR.DWP24Working96Head);
    SeqCopySequence(ML_STAR.DestinationWorkingChannels, ML_STAR.DWP24WorkingChannels);
  }
  if (intDestination == 2)
  {
    intDestinationWells = 96;
    strDestinationPlateDesc = Translate("96 Well Plate");
    intDestinationGripHeightCORE = 4.0;
    intDestinationGripWidthCORE = 81.0;
    intDestinationGripOpenWidthCORE = 90.0;
    intDestinationLidGripHeightCORE = 4.0;
    intDestinationLidGripWidthCORE = 84.0;
    intDestinationLidGripOpenWidthCORE = 90.0;
    intDestinationStackHeight = 6;
    customDialog_17.InitCustomDialog("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");
    customDialog_17.SetCustomDialogProperty( "numeric1.Value", intDestinationMediaVolume );
    customDialog_17.SetCustomDialogProperty( "textBlock1.Text", strDestinationPlateDesc );
    customDialog_17.ShowCustomDialog();
    intDestinationMediaVolume = customDialog_17.GetCustomDialogProperty( "numeric1.Value" );
    intDestinationMediaVolume = intDestinationMediaVolume * intDestinationWells;
    intDestinationMediaVolume = intDestinationMediaVolume / (96 * 1.0);
    if (bolDestinationBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR._4titude_96_plate_BCReadWestSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR._4titude_96_plate_BCReadEastSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.DestinationPutbackStack, ML_STAR._4titude_96_plate_PutbackStack);
    SeqCopySequence(ML_STAR.DestinationTakeoutStack, ML_STAR._4titude_96_plate_TakeoutStack);
    SeqCopySequence(ML_STAR.DestinationWorking96Head, ML_STAR._4titude_96_plate_Working96Head);
    SeqCopySequence(ML_STAR.DestinationWorkingChannels, ML_STAR._4titude_96_plate_WorkingChannels);
  }
  if (intDestination == 3)
  {
    intDestinationWells = 384;
    strDestinationPlateDesc = Translate("384 Well Plate");
    intDestinationGripHeightCORE = 3;
    intDestinationGripWidthCORE = 81.5;
    intDestinationGripOpenWidthCORE = 90.0;
    intDestinationLidGripHeightCORE = 3;
    intDestinationLidGripWidthCORE = 81.5;
    intDestinationLidGripOpenWidthCORE = 90.0;
    intDestinationStackHeight = 1;
    customDialog_18.InitCustomDialog("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");
    customDialog_18.ShowCustomDialog();
    intDestinationMediaVolume = 0;
    if (bolDestinationBarcodePos == 1)
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR._4titute_384_plate_BCReadWestSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Left"));
    }
    else
    {
      SeqCopySequence(ML_STAR.DestinationBCRead, ML_STAR._4titute_384_plate_BCReadEastSide);
      TrcTrace(Translate("Destination barcode will be read from the "), Translate("Right"));
    }
    SeqCopySequence(ML_STAR.DestinationPutbackStack, ML_STAR._4titude_384_plate_PutbackStack);
    SeqCopySequence(ML_STAR.DestinationTakeoutStack, ML_STAR._4titude_384_plate_TakeoutStack);
    SeqCopySequence(ML_STAR.DestinationWorking96Head, ML_STAR._4titude_384_plate_96head);
    SeqCopySequence(ML_STAR.DestinationWorkingChannels, ML_STAR._4titude_384_plate_WorkingChannels);
  }
  intMaxSourcePlates = SeqGetTotal(ML_STAR.SourcePlateTakeoutStack);
  intMaxDestinationPlates = SeqGetTotal(ML_STAR.DestinationTakeoutStack);
  TrcTrace8(Translate("Source plate is set to a "), strSourcePlateDesc, Translate(" and destination plate is set to "), strDestinationPlateDesc, Translate(" Maximum number of source plates is "), intMaxSourcePlates, Translate(" Maximum number of destination plates is "), intMaxDestinationPlates);
}
